PsychoPy2experiment version="1.90.1"
Settings
  expName = planetExp_new
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = testMonitor
  color = $[1,1,1]
  Units = use prefs
  Save excel file = True
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Routines
  Routine trial
    ImageComponent image
      startVal [time (s)] = 0.0
      units = pix
      size = (1920, 1080)
      image [set every repeat] = $imageFile
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    RatingScaleComponent rating
      startVal [time (s)] = 0
      low = 1
      high = 7
      forceEndRoutine = True
      size = 0.5
      pos = 0.8, 0.8
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    TextComponent text
      startVal [time (s)] = 0.0
      pos = (0.8, 0.9)
      text [set every repeat] = $question
      letterHeight = 0.05
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  Routine preferences
    ImageComponent image_2
      startVal [time (s)] = 0.0
      units = pix
      size = (1920, 1080)
      image [set every repeat] = $imageFile
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    RatingScaleComponent rating_2
      startVal [time (s)] = 0.0
      low = 1
      high = 7
      forceEndRoutine = True
      size = 0.5
      pos = 0.8, 0.8
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    TextComponent text_2
      startVal [time (s)] = 0.0
      pos = (0.8, 0.9)
      text = Importance
      letterHeight = 0.05
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  Routine universe
    ImageComponent image_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
      size = (1920,1080)
      image [set every repeat] = $imageFile
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  Routine instructions
    TextComponent intruText
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.05
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      text:
        Imagine you are travelling on a spaceship through deep space. Your spaceship automatically takes photographs of
        planets as you fly through the universe. Your job is to decide which photographs are important to send back to
        earth for the rest of humanity to see.

        This experiment consists of 4 phases. Before each phase begins you will be given instructions for the upcoming phase.


        Phase 1:
        You will watch passively while the computer displays, one at a time, all the planets you will see in remainder
        of the experiment. The purpose of this phase is to make you familiar with the photographs. All you have
        to do in this phase is watch.

        Press any key to begin Phase 1
    KeyboardComponent key_resp_2
      startVal [time (s)] = 5
      forceEndRoutine = True
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  Routine instructions1
    TextComponent instrutext1
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.05
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      text:
        Phase 2:
        You will be presented with one photograph at a time. In the top right corner of the screen you will see the
        word “importance” and a scale from 1-7 below it. Your job is to use the mouse to click the value on the
        scale that best reflects how important it is to send this photograph back to earth for the rest of humanity,
        with 1 being least important and 7 being most important.

        Press any button to begin phase 2.
    KeyboardComponent key_resp_3
      startVal [time (s)] = 2
      forceEndRoutine = True
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  Routine instructions2
    TextComponent instruText2
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.05
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      text:
        Phase 3:
        You will be presented with one photograph at a time. In the top right corner of the screen you will see one
        of the following words; “water”. “rings”, “blue-green”, “red-yellow”, “moons”, or “clouds”, and a scale
        from 1-7 below it. Your job is to use the mouse to click the value on the scale that best reflects how
        prominent the feature is, with 1 being least prominent and 7 being most prominent. The feature is
        indicated by the word above scale (for example “water”).

        Press any button to begin phase 3.
    KeyboardComponent key_resp_4
      startVal [time (s)] = 2
      forceEndRoutine = True
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  Routine instructions3
    TextComponent instruText3
      startVal [time (s)] = 0.0
      color = black
      letterHeight = 0.05
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      text:
        You will be presented with one photograph at a time. In the top right corner of the screen you will see the
        word “importance” and a scale from 1-7 below it. Your job is to use the mouse to click the value on the
        scale that best reflects how important it is to send this photograph back to earth for the rest of humanity,
        with 1 being least important and 7 being most important.

        Press any button to begin phase 4.
    KeyboardComponent key_resp_5
      startVal [time (s)] = 2
      forceEndRoutine = True
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  Routine end
    TextComponent text_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      color = black
      text = Thank you for participating! Please exit the room quietly.
      letterHeight = 0.1
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Flow
  Routine instructions
  LoopInitiator trials_universe loopType="TrialHandler"
    nReps = 1
    conditionsFile = planetExpPreference.xlsx
    loopType = random
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    conditions:
      [OrderedDict([('imageFile', 'images/scr00000.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00001.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00002.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00003.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00004.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00005.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00006.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00007.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00008.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00009.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00010.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00011.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00012.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00013.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00014.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00015.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00016.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00017.jpg'), ('question', 'Importance')])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
    Routine universe
  LoopTerminator trials_universe
  Routine instructions1
  LoopInitiator trials_preference1 loopType="TrialHandler"
    nReps = 1
    conditionsFile = planetExpPreference.xlsx
    loopType = random
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    conditions:
      [OrderedDict([('imageFile', 'images/scr00000.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00001.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00002.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00003.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00004.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00005.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00006.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00007.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00008.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00009.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00010.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00011.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00012.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00013.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00014.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00015.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00016.jpg'), ('question', 'Importance')]),
      OrderedDict([('imageFile', 'images/scr00017.jpg'), ('question', 'Importance')])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
    Routine preferences
  LoopTerminator trials_preference1
  Routine instructions2
  LoopInitiator trials_sensoryJudgement loopType="TrialHandler"
    nReps = 1
    conditionsFile = planetExp.xlsx
    loopType = random
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    conditions:
      [OrderedDict([('imageFile', 'images/scr00000.jpg'), ('question', 'Water')]),
      OrderedDict([('imageFile', 'images/scr00000.jpg'), ('question', 'Clouds')]),
      OrderedDict([('imageFile', 'images/scr00000.jpg'), ('question', 'Rings')]),
      OrderedDict([('imageFile', 'images/scr00000.jpg'), ('question', 'Moons')]),
      OrderedDict([('imageFile', 'images/scr00000.jpg'), ('question', 'Blue-green ')]),
      OrderedDict([('imageFile', 'images/scr00000.jpg'), ('question', 'Red-yellow')]),
      OrderedDict([('imageFile', 'images/scr00001.jpg'), ('question', 'Water')]),
      OrderedDict([('imageFile', 'images/scr00001.jpg'), ('question', 'Clouds')]),
      OrderedDict([('imageFile', 'images/scr00001.jpg'), ('question', 'Rings')]),
      OrderedDict([('imageFile', 'images/scr00001.jpg'), ('question', 'Moons')]),
      OrderedDict([('imageFile', 'images/scr00001.jpg'), ('question', 'Blue-green ')]),
      OrderedDict([('imageFile', 'images/scr00001.jpg'), ('question', 'Red-yellow')]),
      OrderedDict([('imageFile', 'images/scr00002.jpg'), ('question', 'Water')]),
      OrderedDict([('imageFile', 'images/scr00002.jpg'), ('question', 'Clouds')]),
      OrderedDict([('imageFile', 'images/scr00002.jpg'), ('question', 'Rings')]),
      OrderedDict([('imageFile', 'images/scr00002.jpg'), ('question', 'Moons')]),
      OrderedDict([('imageFile', 'images/scr00002.jpg'), ('question', 'Blue-green ')]),
      OrderedDict([('imageFile', 'images/scr00002.jpg'), ('question', 'Red-yellow')]),
      OrderedDict([('imageFile', 'images/scr00003.jpg'), ('question', 'Water')])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
    Routine trial
  LoopTerminator trials_sensoryJudgement
  Routine instructions3
  LoopInitiator trials_preferenceFinal loopType="TrialHandler"
    nReps = 1
    conditionsFile = planetExpPreference.xlsx
    loopType = random
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    conditions:
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    Routine preferences
  LoopTerminator trials_preferenceFinal
  Routine end
